PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'order [1: single-dual or 2: dual-single]': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = AB
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine instructions
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    TextComponent text_instructions
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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    CodeComponent code_instr
      Code Type = Auto->JS
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      Begin Experiment:
        # open file with instructions
        with open('instruction.txt', 'r') as file:
            text = file.read()

        # add the text in the variable
        text_instructions.text = text
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine T1_number
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    TextComponent text_T1
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.083
      text [set every repeat] = $'{:07}'.format(T1)
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  Routine T2_probe
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    TextComponent text_T2
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.083
      text [set every repeat] = $T2
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  Routine Ask_T1
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    TextComponent blankT1_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_T1ask
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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      text:
        ?

        Impar - F    Par - J
    TextComponent blankT1_2
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_T1
      allowedKeys = 'f','j'
      correctAns = $responseT1
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if task == 'single':
            continueRoutine = False
  Routine Ask_T2
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    TextComponent blankT2_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_T2ask
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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      text:
        ?

        Relacionado - F    No relacionado - J
    TextComponent blankT2_2
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_T2
      allowedKeys = 'f','j'
      correctAns = $responseT2
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine T0_context
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    TextComponent context_word
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $T0
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    TextComponent blankContext
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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  Routine distractors_T0_T2
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    TextComponent text_distractors_2
      color = blue
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.083
      text [set every repeat] = $dist
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  Routine distractors_T1
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    CodeComponent skipLoop_ifLag1
      Code Type = Auto->JS
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      Begin Routine:
        if lagT1==1:
             continueRoutine = False
    TextComponent text_distractors
      color = blue
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.083
      text [set every repeat] = $dist
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  Routine settings
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import random

        related_idx = list(range(360))
        unrelated_idx = list(range(360,720))
        random.shuffle(related_idx)
        random.shuffle(unrelated_idx)
      Begin Routine:
        task = task1 if expInfo['order [1: single-dual or 2: dual-single]']=='1' else task2
        n = 30
        trials_in_block = related_idx[-n:] + unrelated_idx[-n:]
        shuffle(trials_in_block)
        related_idx = related_idx[:len(related_idx)-n]
        unrelated_idx = unrelated_idx[:len(unrelated_idx)-n]
  Routine set_block
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  Routine rest
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Please take a break. Press the spacebar to continue.
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    KeyboardComponent press_to_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = task_type.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'task1': 'single', 'task2': 'dual'},
      {'task1': 'single', 'task2': 'dual'},
      {'task1': 'single', 'task2': 'dual'},
      {'task1': 'single', 'task2': 'dual'},
      {'task1': 'single', 'task2': 'dual'},
      {'task1': 'single', 'task2': 'dual'},
      {'task1': 'dual', 'task2': 'single'},
      {'task1': 'dual', 'task2': 'single'},
      {'task1': 'dual', 'task2': 'single'},
      {'task1': 'dual', 'task2': 'single'},
      {'task1': 'dual', 'task2': 'single'},
      {'task1': 'dual', 'task2': 'single'}]
    Routine settings
    LoopInitiator trial loopType="TrialHandler"
      Selected rows = $trials_in_block
      conditionsFile = wordPairs.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'T0': 'HANDS', 'T2': 'XXFEETX', 'T1': 4444444, 'lagT0': 10, 'lagT1': 7, 'lagT2': 3, 'responseT1': 'f', 'responseT2': 'f', 'related': 1},
        {'T0': 'STORE', 'T2': 'XXSHOPX', 'T1': 3333333, 'lagT0': 10, 'lagT1': 7, 'lagT2': 3, 'responseT1': 'j', 'responseT2': 'f', 'related': 1},
        {'T0': 'CURTAIN', 'T2': 'XDRAPEX', 'T1': 4444444, 'lagT0': 10, 'lagT1': 3, 'lagT2': 7, 'responseT1': 'f', 'responseT2': 'f', 'related': 1},
        {'T0': 'CAT', 'T2': 'XKITTEN', 'T1': 5555555, 'lagT0': 7, 'lagT1': 3, 'lagT2': 10, 'responseT1': 'j', 'responseT2': 'f', 'related': 1},
        {'T0': 'PONDER', 'T2': 'XTHINKX', 'T1': 1111111, 'lagT0': 7, 'lagT1': 7, 'lagT2': 6, 'responseT1': 'j', 'responseT2': 'f', 'related': 1},
        {'T0': 'BAG', 'T2': 'XXSACKX', 'T1': 9999999, 'lagT0': 10, 'lagT1': 7, 'lagT2': 3, 'responseT1': 'j', 'responseT2': 'f', 'related': 1},
        {'T0': 'STRAW', 'T2': 'XXHAYXX', 'T1': 6666666, 'lagT0': 10, 'lagT1': 3, 'lagT2': 7, 'responseT1': 'f', 'responseT2': 'f', 'related': 1},
        {'T0': 'WEEDS', 'T2': 'XROOTSX', 'T1': 1111111, 'lagT0': 7, 'lagT1': 7, 'lagT2': 6, 'responseT1': 'j', 'responseT2': 'f', 'related': 1},
        {'T0': 'PROMISE', 'T2': 'XPLEDGE', 'T1': 5555555, 'lagT0': 10, 'lagT1': 7, 'lagT2': 3, 'responseT1': 'j', 'responseT2': 'f', 'related': 1},
        {'T0': 'PROFIT', 'T2': 'XXLOSSX', 'T1': 9999999, 'lagT0': 10, 'lagT1': 7, 'lagT2': 3, 'responseT1': 'j', 'responseT2': 'f', 'related': 1},
        {'T0': 'DIRTY', 'T2': 'XCLEANX', 'T1': 7777777, 'lagT0': 10, 'lagT1': 7, 'lagT2': 3, 'responseT1': 'j', 'responseT2': 'f', 'related': 1}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
      Routine T0_context
      LoopInitiator trials_T0_context loopType="TrialHandler"
        Selected rows = $"0:{}".format(lagT0-1)
        conditionsFile = distractors.csv
        isTrials = False
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('dist', 'ZTFYDXH')]),
          OrderedDict([('dist', 'YGLMSFQ')]),
          OrderedDict([('dist', 'VYKXSPC')]),
          OrderedDict([('dist', 'ZJTSHFP')]),
          OrderedDict([('dist', 'HLFPYXK')]),
          OrderedDict([('dist', 'GQKRPDL')]),
          OrderedDict([('dist', 'WMYFTGJ')]),
          OrderedDict([('dist', 'YNPLRQW')]),
          OrderedDict([('dist', 'VFDMHQS')]),
          OrderedDict([('dist', 'HQTYPJM')]),
          OrderedDict([('dist', 'TJRHKVF')]),
          OrderedDict([('dist', 'WFXQGMY')]),
          OrderedDict([('dist', 'JTDRCMW')]),
          OrderedDict([('dist', 'CPTFVGH')]),
          OrderedDict([('dist', 'YDKQZLG')]),
          OrderedDict([('dist', 'RSDPZCJ')]),
          OrderedDict([('dist', 'WMSDQRB')]),
          OrderedDict([('dist', 'HJQLBFS')]),
          OrderedDict([('dist', 'VWSDTQH')]),
          OrderedDict([('dist', 'FLGCMVX')]),
          OrderedDict([('dist', 'GKZSHVY')]),
          OrderedDict([('dist', 'YBLZVCD')]),
          OrderedDict([('dist', 'PQVBKJR')]),
          OrderedDict([('dist', 'JPWLHGK')]),
          OrderedDict([('dist', 'BVHRNCY')]),
          OrderedDict([('dist', 'BDPZHLQ')]),
          OrderedDict([('dist', 'CNKDFSY')]),
          OrderedDict([('dist', 'HVBCNTW')]),
          OrderedDict([('dist', 'MDBVHJC')]),
          OrderedDict([('dist', 'XKZWMHB')]),
          OrderedDict([('dist', 'GTXDRCB')]),
          OrderedDict([('dist', 'TYMSFWR')]),
          OrderedDict([('dist', 'FSLJWBM')]),
          OrderedDict([('dist', 'QRHXWTK')]),
          OrderedDict([('dist', 'NXZHCGP')]),
          OrderedDict([('dist', 'QMWBJHV')]),
          OrderedDict([('dist', 'VNTRDYX')]),
          OrderedDict([('dist', 'VRCXZBH')]),
          OrderedDict([('dist', 'SYHGWMP')]),
          OrderedDict([('dist', 'MDYPCJB')]),
          OrderedDict([('dist', 'CRGYPJV')]),
          OrderedDict([('dist', 'DCYRVXN')]),
          OrderedDict([('dist', 'QDKCJMY')]),
          OrderedDict([('dist', 'ZBFWLSM')])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
        Routine distractors_T0_T2
      LoopTerminator trials_T0_context
      Routine T1_number
      LoopInitiator trials_T1 loopType="TrialHandler"
        Selected rows = $"0:{}".format(lagT1-1)
        conditionsFile = distractors.csv
        loopType = random
        nReps = 1
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        conditions:
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        Routine distractors_T1
      LoopTerminator trials_T1
      Routine T2_probe
      LoopInitiator trials_T2 loopType="TrialHandler"
        Selected rows = $"0:{}".format(lagT2)
        conditionsFile = distractors.csv
        loopType = random
        nReps = 1
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        conditions:
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        Routine distractors_T0_T2
      LoopTerminator trials_T2
      Routine Ask_T1
      Routine Ask_T2
    LoopTerminator trial
    Routine rest
  LoopTerminator block
